CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Custom
    Select the rule criteria:and (file does contain ".tif")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e. metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file. A metadata format for a 384-well plate metadata format is used here. However, only the following metadata are relevant to the images used in this experiment: Plate is used to indicate the individual experiment (e.g. date 1, date 2, date 3); WellID indicates experimental conditions (e.g. A01 = No CSF PBS-treated BMDM, A02= No CSF Leucine-treated BMDM, A03 = CSF treated, PBS-treated BMDM  A04 = CSF-treated, leucine-treated BMDM. Separate images are designated as separate fields (f01, f02, f03...) Different stains (DAPI, anti-Actin, and MCSFR) are indicated as C1, C2, C3. Metadata designation is arbitrary and may be adapted as needed.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^C(?P<dye>[0-9])(?P<PlateID>.*)_(?P<WellID>[A-Za-z][0-9]{1,2})f(?P<Field>[0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'DAPI': u'PlateID', u'Actin': u'PlateID', u'MCSFR': u'PlateID'}, {u'DAPI': u'WellID', u'Actin': u'WellID', u'MCSFR': u'WellID'}, {u'DAPI': u'Field', u'Actin': u'Field', u'MCSFR': u'Field'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "C1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:MCSFR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['N/A']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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Generation of an illumination function which represents background fluorescence. This will enable background subtraction to enhance nuclear segmentation based on DAPI signal. (Step 1 of background subtraction for DAPI)']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
    Select the input image:DAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:30
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['Background subtraction based on previously generated illumination function to enhance nuclear segmentation based on DAPI signal. (Step 2 of background subtraction for DAPI)']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
    Select the input image:DAPI
    Name the output image:CorrDAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:7|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notes:['Thresholding and segmentation of DAPI signal to define nuclei']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
    Select the input image:CorrDAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):11,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:5
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.02,1.0
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
SplitOrMergeObjects:[module_num:8|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notes:['Merge nuclear objects that are contigous (less than 1 pixel distance in separation) to form singular nuclei per cell.']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
    Select the input objects:Nuclei
    Name the new objects:MergedNuclei
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
CorrectIlluminationCalculate:[module_num:9|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notes:['Generation of an illumination function which represents background fluorescence. This will enable background subtraction to enhance cellular segmentation based on Anti-Actin signal. (Step 1 of background subtraction for Cell area)']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
    Select the input image:Actin
    Name the output image:IllumActin
    Select how the illumination function is calculated:Background
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    Block size:75
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Smooth to Average
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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notes:['Background subtraction based on previously generated illumination function to enhance cellular segmentation based on anti-Actin signal. (Step 2 of background subtraction for cell area)']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
    Select the input image:Actin
    Name the output image:CorrActin
    Select the illumination function:IllumActin
    Select how the illumination function is applied:Subtract

IdentifySecondaryObjects:[module_num:11|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notes:['Thresholding and segmentation of anti-actin signal to define single cells. Note: The method used here is propagation. Propagation starts from an input object (here, the nuclear objects) and propagates to the periphery on the thresholded signal. In this case, this enables the separate identification of adjacent and even contiguous cells. ']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
    Select the input objects:MergedNuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrActin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:4
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.002,1.0
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
MeasureObjectIntensity:[module_num:12|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notes:['Measure MCSFR intensity in each of the defined compartments']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
    Hidden:1
    Select an image to measure:MCSFR
    Select objects to measure:Cell

RescaleIntensity:[module_num:13|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notes:['Rescale image intensity (post-analysis) to visualize object segmetation (for overlaying cell, nuclear segmentation)']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
    Select the input image:MCSFR
    Name the output image:RescaleMCSFR
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:14|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notes:['Overlays cell and nuclear objects over MCSFR immunostain (rescaled intensity)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleMCSFR
    Name the output image:OrigOverlay1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cell
    Select outline color:#9EFCFA
    Select objects to display:MergedNuclei

Tile:[module_num:15|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notes:['Generates tiled image of MCSFR stain (rescaled intensity) +/- analysis overlay']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
    Select an input image:RescaleMCSFR
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:2
    Final number of columns:1
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:OrigOverlay1

SaveImages:[module_num:16|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notes:['Saves analysis images with a useful name and location. Change location of default output file location through the "view output settings" option.']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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<PlateID>_\g<WellID>_\g<Field>
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|pics
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:17|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notes:['Export data as a CSV file.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:MergedNuclei|Children_Cell_Count,MergedNuclei|Number_Object_Number,MergedNuclei|Location_Center_Y,MergedNuclei|Location_Center_X,MergedNuclei|Parent_Nuclei,Image|Count_MergedNuclei,Image|Count_Cell,Image|Count_Nuclei,Image|Width_DAPI,Image|Width_Actin,Image|Width_MCSFR,Image|ExecutionTime_16SaveImages,Image|ExecutionTime_06CorrectIlluminationApply,Image|ExecutionTime_08SplitOrMergeObjects,Image|ExecutionTime_01Images,Image|ExecutionTime_04Groups,Image|ExecutionTime_07IdentifyPrimaryObjects,Image|ExecutionTime_05CorrectIlluminationCalculate,Image|ExecutionTime_02Metadata,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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