CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does contain ".tif")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<PlateID>.*)_(?P<WellID>[A-Za-z][0-9]{1,2})f(?P<Field>[0-9]{1,2})d(?P<dye>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it. Dyes are indicated by d0-9. In this experiment, Hoechst was used to label nuclei in live cells, FITC-dextran was used to measure bulk fluid intake through macropinocytosis, and phase contrast microscopy was used to visualize the entire cell. The Open source machine learning program Ilastik was used to generate a cell mask based on the phase images.']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Phase': u'PlateID', u'FDx': u'PlateID', u'Ilastik': u'PlateID', u'Hoechst': u'PlateID'}, {u'Phase': u'WellID', u'FDx': u'WellID', u'Ilastik': u'WellID', u'Hoechst': u'WellID'}, {u'Phase': u'Field', u'FDx': u'Field', u'Ilastik': u'Field', u'Hoechst': u'Field'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "d0.tif")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "d1.tif")
    Name to assign these images:FDx
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d2.tif")
    Name to assign these images:Phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d3.tif")
    Name to assign these images:Ilastik
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['N/A']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei based on Hoescht staining.']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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):40,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:20
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
CorrectIlluminationCalculate:[module_num:6|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notes:['Generate function to determine background fluorescence in the FITC dextran image. This is done individually for each image. The purpose of this function is to account for experiment to experiment variation in background fluorescence which may confound macropinosome object segmentation.']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
    Select the input image:FDx
    Name the output image:IllumFDx
    Select how the illumination function is calculated:Background
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    Block size:25
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:25
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['Subtract background based on previously generated function.']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
    Select the input image:FDx
    Name the output image:CorrFDx
    Select the illumination function:IllumFDx
    Select how the illumination function is applied:Subtract

EnhanceOrSuppressFeatures:[module_num:8|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notes:['Enhances edges around round features in the image. This allows better discrimination between adjacent macropinosomes. Notice feature size is relatively large. This will need to be adjusted based on the pixel depth of images.']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
    Select the input image:CorrFDx
    Name the output image:Pinosome
    Select the operation:Enhance
    Feature size:60
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:9|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notes:['Macropinosome object segmentation accomplished by adaptive thresholding. Advanced settings were calibrated to maximize the macropinosome area difference between positive control (M-CSF, starving) and negative control (unstimulated, starving). The current settings gave maximal separation and were then blindly applied to the remaining experimental conditions consistently. ']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
    Select the input image:Pinosome
    Name the primary objects to be identified:Macropinosomes
    Typical diameter of objects, in pixel units (Min,Max):4,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:.7
    Lower and upper bounds on threshold:0.004,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

Erosion:[module_num:10|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notes:['Machine learning software Ilastik was used to generate cell masks based on phase images. Here, these masks are eroded to remove adjacent autofluorescent or dye-loaded debris.']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
    Select the input image:Ilastik
    Name the output image:Ilastik_Erosion
    Structuring element:disk,10

IdentifySecondaryObjects:[module_num:11|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notes:['Cell outline defined based on eroded Ilastik images. The propagation method starts from the nucleus and expands to the end of the cell mask or until another cell object is encountered.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:Ilastik_Erosion
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.005,1.0
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
ExpandOrShrinkObjects:[module_num:12|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notes:['Cell objects expanded to approximate original cell area without including debris.']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
    Select the input objects:Cell
    Name the output objects:cellmask
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:7
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
MeasureObjectSizeShape:[module_num:13|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notes:['Cell area measured.']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
    Select objects to measure:cellmask
    Calculate the Zernike features?:No

FilterObjects:[module_num:14|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notes:['Cell objects one standard deviation below the measured average cell area were removed (these were most often cell debris or dying cells).']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
    Select the objects to filter:cellmask
    Name the output objects:FilterCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:17000
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:15|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notes:['Measure macropinosome area']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
    Select objects to measure:Macropinosomes
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:16|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notes:['Measure FITC dextran in macropinosomes.']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
    Hidden:1
    Select an image to measure:CorrFDx
    Select objects to measure:FilterCells
    Select objects to measure:Macropinosomes

RelateObjects:[module_num:17|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notes:['Relate macropinosomes to filtered cells']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
    Parent objects:FilterCells
    Child objects:Macropinosomes
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:macropinosomes_cell
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
RelateObjects:[module_num:18|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notes:['Relate nuclei to filtered cells']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
    Parent objects:FilterCells
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:nuceli_cell
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
RescaleIntensity:[module_num:19|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notes:['Rescale image intensity to allow full intensity range to be visualized. This is to illustrate macropinosome identification. However, this does not allow comparison between image intensities because rescaling is not a uniform process.']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
    Select the input image:Phase
    Name the output image:Rescaledphase
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:20|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notes:['Rescale image intensity to allow full intensity range to be visualized. This is to illustrate macropinosome identification. However, this does not allow comparison between image intensities because rescaling is not a uniform process.']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
    Select the input image:CorrFDx
    Name the output image:Rescalededextran
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Rescaledphase
    Name the output image:OrigOverlay_onphase
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:FilterCells
    Select outline color:#8AFA69
    Select objects to display:macropinosomes_cell

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Rescalededextran
    Name the output image:OrigOverlay_onFdx
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#1DE2E2
    Select objects to display:FilterCells
    Select outline color:#71F074
    Select objects to display:macropinosomes_cell

Tile:[module_num:23|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
    Select an input image:OrigOverlay_onphase
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:2
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:OrigOverlay_onFdx

SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<PlateID>_\g<WellID>_\g<Field>
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|pics
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:macropinosomes_cell|Location_Center_Y,macropinosomes_cell|Location_Center_X,macropinosomes_cell|Location_Center_Z,macropinosomes_cell|Number_Object_Number,macropinosomes_cell|Parent_Macropinosomes,Image|Count_cellmask,Image|Count_Cell,Image|Count_macropinosomes_cell,Image|Count_Macropinosomes,Image|Count_FilterCells,Image|Count_nuceli_cell,Image|Count_Nuclei,Image|MD5Digest_Phase,Image|MD5Digest_FDx,Image|MD5Digest_Ilastik,Image|MD5Digest_Hoechst,Image|ExecutionTime_22OverlayOutlines,Image|ExecutionTime_21OverlayOutlines,Image|ExecutionTime_16MeasureObjectIntensity,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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